PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'participant': u'1', u'delay_first': u'n', u'points_per_rnf': u'3', u'gender': u'f', u'age': u'20', u'credits_to_win': u'10000', u'credits': u'100', u'session': u'1', u'cost_responding': u'1', u'trial_duration': u'1', u'condition': u'a'}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Save log file = False
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = DelayTask2
  logging level = data
  Screen = 1
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Routines
  Routine training
    ImageComponent background
      opacity = .35
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $background_colour
      size = 2
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    ImageComponent button_image1
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $button_img1
      size = [0.5, 0.5]
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    ImageComponent button_image2
      pos = [0.5, -0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $button_img2
      size = [0.5, 0.5]
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    KeyboardComponent response
      correctAns = 'a','l'
      storeCorrect = True
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent crd_text
      color = $[1.000,-1.000,-1.000]
      text = Shares
      pos = [0.0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent condition_txt
      opacity = .3
      color = black
      text [set every repeat] = $company1
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent condition_txt_right
      opacity = .3
      color = black
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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      text [set every repeat]:
        $company2
    TextComponent credits_txt
      color = black
      pos = (0, .7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Experiment:
        #I tested the code with RI because for RPI schedules around 7 or 6 response_times were lost from the csv file. The Ri works fine so that suggests that the memory size of 5-ish is causing the program not to save the responses before those 5ish. That I need to test next.

        rnfProb1=[] # here we save the rnf prob for each trial

        #credits_txt =  visual.TextBox(window=win, text='text', font_size=30,
        #                         font_color=[-1, -1, 1], size=(1.9, .3), pos=(0, 0.65),
        #                         grid_horz_justification='center', units='norm')
      Begin Routine:
        # these empty arrays below are filled as participant responds
        # they need to be erased after each trial, so they are put in "Begin Routine" and not "Begin Experiment"
        reinf_times = []
        wasRnf = []
        irt=[]
        company_names_rnf_delay = [] # this one is to save the company names to show on the screen for each reinforcer given in delay condition

        # to save reinf_times for delay reinforcement
        reinf_times_delay = []

        nResp = 0
        nReinf = 0

        #if continueRoutine:
        #begin_trial.play()

        # set a timer for the trial
        timer = core.CountdownTimer(float(expInfo['trial_duration']))

        # Current schedule and parameters
        if expInfo['delay_first'] == 'n':
            if trial %2 == 1: # if trial = 1,3,..., etc.
                schedule = Schedule('Delay', 5)
            elif trial % 2 == 0: # if trial = 0, 2, ..., etc.
                schedule = Schedule('CRF', 1) # the 1 does not mean anything
                #schedule = Schedule('FR', 1)
        else:
            if trial %2 == 1: # if trial = 1,3,..., etc.
                schedule = Schedule('CRF', 1)
            elif trial % 2 == 0: # if trial = 0, 2, ..., etc.
                schedule = Schedule('Delay', 5) # the 1 does not mean anything
                #schedule = Schedule('FR', 1)

        print(schedule.type)
        print(schedule.parameter)

        # Parameters for the RI and RI+ schedule: set tick each sec
        shouldBeReinforced = False # flag to set next reinforcer for RI schedule
        tickClock = core.CountdownTimer(1) # this is to tick every second

        # Clock for Debounce Time
        DebounceTimer = core.CountdownTimer(1)

        #reinf_delivery_time = 5 # this was to debug the delay schedule; it
        # is replaced by reinf_times_delivery array
      End Routine:
        #intervalToRnf = scheduleParameter[1]# + np.random.permutation(limit)[0]

        #nResp = len(response_training.rt)
        #nReinf = len(reinf_times)

        print("nResp: %f")%nResp
        print("nReinf: %f")%nReinf

        #if len(response.rt)>=1:
        #    rnfProb1.append(nReinf/nResp)
        #else:
        #    rnfProb1.append(0) # if no responses, add zero
        #print("rnfProb: %f")%rnfProb1[-1]


        if response.keys != None:  # we had a response
            thisExp.addData('reinf_times', reinf_times)
            thisExp.addData('wasRnf', wasRnf)
            thisExp.addData('irts', irt)
            thisExp.addData('mean_irt', np.mean(irt))
            #thisExp.addData('rnf_prob', rnfProb1)
            thisExp.nextEntry()

        core.wait(2)

        trial += 1
      End Experiment:
        csv_file.close()
      Each Frame:
        #if mouse.isPressedIn(machine2_1):
        #    not_active1.pos = [-0.45, 0]
        #    schedule.type = 'RPI'
        #    schedule.parameter = 6

        #if mouse.isPressedIn(machine1):
        #    not_active1.pos = [0, 0]
        #    schedule.type = 'RR'
        #    schedule.parameter = 7



        if len(theseKeys)>0 and DebounceTimer.getTime() < 0: #DebounceTimer is the min IRT permitted
            #this_IRT = 0
            coin.play()
            if response.keys[-1] == 'a':
                button_pressed.pos = (-0.5, -0.2)
                company_name = str(company1)
            elif response.keys[-1] == 'l':
                button_pressed.pos = (0.5, -0.2)
                company_name = str(company2)
            print(str(schedule.type))
            print('company name:' + company_name)

            if schedule.type == "Delay":
                company_names_rnf_delay.append(company_name)

            DebounceTimer.reset() # re-start debounce timer

            img_clock = core.Clock() # clock to show img for a n of sec
            while img_clock.getTime() < 0.10: # draw button pressed
                if response.keys[-1] == 'a':
                    button_image1.setAutoDraw(False)
                elif response.keys[-1] == 'l':
                    button_image2.setAutoDraw(False)
                button_pressed.draw()
                win.flip()
                button_image1.setAutoDraw(True)
                button_image2.setAutoDraw(True)

            nResp += 1
            n_resp_since_last_rnf += 1
            credits -= int(expInfo['cost_responding'])
            schedule.giveRnf(response.rt[-1])

            if len(response.rt)>1:
                irt.append(response.rt[-1]-response.rt[-2])
            else:
                irt.append(response.rt[-1])
            # write to csv on each frame in which there is a response
            try:
                writer_object.writerow([expInfo['session'], expInfo['participant'], response.keys[-1], response.rt[-1], wasRnf[-1], irt[-1], training_trials.thisN, trial, schedule.type, schedule.parameter, nResp, nReinf, background_colour[:-4], company1, company2, 'None'])
            except:
                pass


        if schedule.type == 'Delay' and len(reinf_times_delay)>0:
            if t >= reinf_times_delay[0] and t < int(expInfo['trial_duration']) - schedule.parameter: # give delayed reinforcer. Only if the response was such that the time left to the end of trial permits it.
                company_name = company_names_rnf_delay[0]
                company_names_rnf_delay.pop(0)
                reward_to_screen()
                reinf_times_delay.pop(0) # drop first reinf time
                wasRnf.append(1)
                response.keys.append('delayed_rnf')
                response.rt.append(t)
                nReinf += 1
                n_resp_since_last_rnf = 0 #reset this to start counting again
        #think about how to save the inter reinforcement intervals when delivering delayed rewards
        #            if len(response.rt)>1:
        #                irt.append(response.rt[-1]-response.rt[-2])
        #            else:
        #                irt.append(response.rt[-1])
                writer_object.writerow([expInfo['session'], expInfo['participant'], response.keys[-1], response.rt[-1], wasRnf[-1], irt[-1], training_trials.thisN, trial, schedule.type, schedule.parameter, nResp, nReinf, background_colour[:-4], company1, company2, 'None'])
        #    except:
        #        pass

        if len(reinf_times) > 1:
            tSinceLastRnf = t - reinf_times[-1]

        # this is the tick for the RI and RI+ schedules
        if not shouldBeReinforced and tickClock.getTime() <= 0:
            shouldBeReinforced = np.random.binomial(1, 0.2)
            tickClock.reset()

        #if len(response.rt)>1:
        #    this_IRT = t - response.rt[-1]
        #else:
        #this_IRT = 0
            #print(this_IRT)

        #this_IRT = t - response.rt[-1] if nResp > 0 else t





        # this is just to debug
        #credits_txt = visual.TextStim(win, text=str(int(credits)), pos=(0.0, 0.65), color=u'black')

        credits_txt.setText(str(int(credits)))
        #credits_txt.draw()


        # this should be part of debug function; shows n of reinf and resp so far
        this_IRT_txt =  visual.TextStim(win, text=str(round(DebounceTimer.getTime(),2)), pos=(-0.5, 0.35), color=u'black')
        #nResp_txt = visual.TextStim(win, text=str(int(nResp)), pos=(0.8, 0.35), color=u'black')
        #nReinf_txt = visual.TextStim(win, text=str(int(nReinf)), pos=(0.8, 0.35), color=u'black')
        #this_IRT_txt.draw()
        #nResp_txt.draw()
        #nReinf_txt.draw()

        if debugging:
            show_debugging_stuff()

        #if timer.getTime() <= 0:
        #    continueRoutine=False

        if timer.getTime() <= 0 or credits >= credits_to_win:
            continueRoutine=False
  Routine instructions2
    TextComponent instructions2_txt
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Every time you press one of the buttons to invest, you will be buying one share = 3 points.

        There is also a processing fee of 1 point for each press that you make.

        Remember, try to earn as many points as possible. The participant that earns the most points at the end of the study will win a £10 Amazon gift card which can be used as you wish.

        Good luck!

        Press 'c' to continue
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent text_ITI
      color = black
      text = Now press 'c' to go to the next trading session.
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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    KeyboardComponent key_resp_ITI
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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  Routine trial2
    CodeComponent code_5
      Begin Experiment:
        # create a csv file to save response times etc
        file_name1 = 'data/S%s_%s_%s_Test' %(expInfo['participant'], expName, expInfo['date'])
        csv_file1 = open(file_name1+'.csv', 'wb')
        writer_object1 = csv.writer(csv_file1, delimiter=",")

        writer_object1.writerow(['session', 'participant', 'response.keys', 'response.rt','trials', 'nResp', 'city', 'company1', 'company2', 'devalued_company']) # this is the first row with headers for columns

        # this file saves ps for each session = 30 reinf, for ex.
        #file_name2 = '%s_%s_model%i_Sessions-' %(schedule.name, schedule.parameter, model)
        #csv_file2 = open(file_name2 + str(datetime.datetime.now().strftime("%d-%m-%Y_%H-%M")) + '.csv', 'wb')
        #writer_object2 = csv.writer(csv_file2, delimiter=",")
        #writer_object2.writerow(['session', 'prob_type', 'prob_value', 'rat', 'schedule', 'parameter'])
  Routine devaluation
    ImageComponent image
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0.0
      image = devaluation_img.png
      size = 2
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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    TextComponent devaluation_text
      color = red
      text [set every repeat] = $devalued_company
      pos = [0, .4]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent text_2
      color = black
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The economy is booming, but not for all companies. The company below has crashed:
    TextComponent text_3
      color = black
      text = Press 'c' to continue
      pos = [0, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent non_devaluation_text
      color = green
      text [set every repeat] = $non_devalued_company
      pos = [0, -.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent text_4
      color = black
      text = However, this company is doing better:
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine extinction_test_2
    ImageComponent background_3
      opacity = .35
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $background_colour
      size = 2
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    ImageComponent button_img_3
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      image = button_img.png
      size = [0.5, 0.5]
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    ImageComponent button_img2_3
      pos = [0.5, -0.2]
      startVal [time (s)] = 0.0
      image = button_img.png
      size = [0.5, 0.5]
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    KeyboardComponent response_3
      correctAns = wasRnf
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent crd_text_3
      color = $[1.000,1.000,-1.000]
      text = Credits
      pos = [0.0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent condition_txt_3
      color = black
      text [set every repeat] = $text
      pos = [0, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_4
      Begin Experiment:
        #I tested the code with RI because for RPI schedules around 7 or 6 response_times were lost from the csv file. The Ri works fine so that suggests that the memory size of 5-ish is causing the program not to save the responses before those 5ish. That I need to test next.

        rnfProb1=[] # here we save the rnf prob for each trial
      Begin Routine:
        # these empty arrays below are filled as participant responds
        # they need to be erased after each trial, so they are put in "Begin Routine" and not "Begin Experiment"
        reinf_times = []
        wasRnf = []
        irt=[]

        # to save reinf_times for delay reinforcement
        reinf_times_delay = []

        nResp = 0
        nReinf = 0

        #if continueRoutine:
        #begin_trial.play()

        # set a timer for the trial
        timer = core.CountdownTimer(float(expInfo['trial_duration']))

        # Current schedule and parameters
        if trial in [1,3,5,7,9,11,13,15]: # if trial = 1,3,..., etc.
            schedule = Schedule('FR', 99999)
        elif trial in [0,2,4,6,8,10,12,14]: # if trial = 0, 2, ..., etc.
            schedule = Schedule('FR', 99999)

        #print the schedule and parameter in console just to check if working OK
        print(schedule.type)
        print(schedule.parameter)

        # Parameters for the RI and RI+ schedule: set tick each sec
        shouldBeReinforced = False # flag to set next reinforcer for RI schedule
        tickClock = core.CountdownTimer(1) # this is to tick every second

        #reinf_delivery_time = 5 # this was to debug the delay schedule; it
        # is replaced by reinf_times_delivery array
      End Routine:
        #intervalToRnf = scheduleParameter[1]# + np.random.permutation(limit)[0]

        #nResp = len(response_training.rt)
        #nReinf = len(reinf_times)

        print("nResp: %f")%nResp
        print("nReinf: %f")%nReinf

        if len(response.rt)>=1:
            rnfProb1.append(nReinf/nResp)
        else:
            rnfProb1.append(0) # if no responses, add zero
        print("rnfProb: %f")%rnfProb1[-1]


        if response.keys != None:  # we had a response
            thisExp.addData('reinf_times', reinf_times)
            thisExp.addData('wasRnf', wasRnf)
            thisExp.addData('irts', irt)
            thisExp.addData('mean_irt', np.mean(irt))
            thisExp.addData('rnf_prob', rnfProb1)
            thisExp.nextEntry()

        core.wait(2)

        trial += 1
      Each Frame:
        #if mouse.isPressedIn(machine2_1):
        #    not_active1.pos = [-0.45, 0]
        #    schedule.type = 'RPI'
        #    schedule.parameter = 6

        #if mouse.isPressedIn(machine1):
        #    not_active1.pos = [0, 0]
        #    schedule.type = 'RR'
        #    schedule.parameter = 7

        if schedule.type == 'Delay' and len(reinf_times_delay)>0:
            if t >= reinf_times_delay[0]: # give delayed reinforcer
                reward_to_screen()
                reinf_times_delay.pop(0) # drop first reinf time
                wasRnf.append(1)
                response.keys.append('None')
                response.rt.append(t)
                nReinf += 1
                n_resp_since_last_rnf = 0 #reset this to start counting again
        #think about how to save the inter reinforcement intervals when delivering delayed rewards
        #            if len(response.rt)>1:
        #                irt.append(response.rt[-1]-response.rt[-2])
        #            else:
        #                irt.append(response.rt[-1])
                writer_object.writerow([expInfo['session'], expInfo['participant'], response.keys[-1], response.rt[-1], wasRnf[-1], irt[-1], trials.thisN, trial, schedule.type, schedule.parameter, nResp, nReinf])
        #    except:
        #        pass

        if len(reinf_times) > 1:
            tSinceLastRnf = t-reinf_times[-1]

        # this is the tick for the RI and RI+ schedules
        if not shouldBeReinforced and tickClock.getTime() <= 0:
            shouldBeReinforced = np.random.binomial(1, 0.2)
            tickClock.reset()

        #if len(response.rt)>1:
        #    this_IRT = t - response.rt[-1]
        #    print(this_IRT)

        if len(theseKeys)>0:
            coin.play()
            if response.keys[-1] == 'a':
                button_pressed.pos = (-0.5, -0.2)
            else:
                button_pressed.pos = (0.5, -0.2)
            #for frameN in range(2000):#for exactly 200 frames
            #    if 1000 <= frameN < 1500:  # present fixation for a subset of frames
            #button_pressed.setAutoDraw(True)
            #button_pressed.autoLog=False

            img_clock = core.Clock() # clock to show img for a n of sec
            while img_clock.getTime() < 0.15: # draw button pressed
                if response.keys[-1] == 'a':
                    button_img3.setAutoDraw(False)
                else:
                    button_img2_3.setAutoDraw(False)
                button_pressed.draw()
                win.flip()
                button_img.setAutoDraw(True)
                button_img2.setAutoDraw(True)

            nResp += 1
            n_resp_since_last_rnf += 1
            credits -= int(expInfo['cost_responding'])
            #schedule.giveRnf(response.rt[-1])

            if len(response.rt)>1:
                irt.append(response.rt[-1]-response.rt[-2])
            else:
                irt.append(response.rt[-1])
            # write to csv on each frame in which there is a response
            try:
                writer_object.writerow([expInfo['session'], expInfo['participant'], response.keys[-1], response.rt[-1], wasRnf[-1], irt[-1], trials.thisN, trial, schedule.type, schedule.parameter, nResp, nReinf])
            except:
                pass


        # this is just to debug
        credits_txt = visual.TextStim(win, text=str(int(credits)), pos=(0.0, 0.65), color=u'black')
        credits_txt.draw()

        # this should be part of debug function; shows n of reinf and resp so far
        #this_IRT_txt =  visual.TextStim(win, text=str(int(this_IRT)), pos=(-0.8, 0.35), color=u'black')
        #nResp_txt = visual.TextStim(win, text=str(int(nResp)), pos=(0.8, 0.35), color=u'black')
        #nReinf_txt = visual.TextStim(win, text=str(int(nReinf)), pos=(0.8, 0.35), color=u'black')
        #this_IRT.draw()
        #nResp_txt.draw()
        #nReinf_txt.draw()

        if debugging:
            show_debugging_stuff()

        #if timer.getTime() <= 0:
        #    continueRoutine=False

        if timer.getTime() <= 0 or credits >= credits_to_win:
            continueRoutine=False
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    CodeComponent code
      Begin Experiment:
        import csv, random

        # Load images
        #hand_img = 'hand_down.png'
        #yoshi_img = 'yoshi_coin.png'
        triangle_img = 'triangle.png'
        button_pressed_img = 'button_img_pale.png'

        #Load sounds
        coin = sound.Sound('coin.wav')
        reward = sound.Sound('reward2.wav')
        begin_trial = sound.Sound('begin_trial.wav')
        exp_finished = sound.Sound('exp_finished.wav')

        # Parameters for the VI
        #scheduleParameter = [int(expInfo['parameter1']),int(expInfo['parameter2'])] # schedule parameters
        #limit = int(expInfo['limit']) # variability of intervals


        # interval to reinforce for first trial on a VI schedule
        #intervalToRnf = scheduleParameter[0]

        credits = int(expInfo['credits'])
        credits_to_win = float(expInfo['credits_to_win'])
        points_per_rnf = float(expInfo['points_per_rnf'])
        cost_responding = int(expInfo['cost_responding'])

        time_on_screen = 0.4 # how long the reward is gonna show on the screen

        # initialise parameter for RIplus
        tSinceLastRnf = 0

        # initialise parameters for RPI
        #tRPI = 0
        #RnfProbRPI = 0

        # Initialise parameters for RI
        shouldBeReinforced = False # flag to set next reinforcer for RI schedule

        # Initialise parameters for FR and RI+
        n_resp_since_last_rnf = 0

        # create mouse event
        #mouse = event.Mouse(visible=True)

        # Messages to show when rewarded
        #img = visual.ImageStim(win, image=triangle_img, pos=(0, 0), size=1)
        button_pressed = visual.ImageStim(win, image=button_pressed_img, pos=(-.5, -.2))
        button_pressed.size = 0.5

        class Schedule(object):
            ''' this class initialise the schedule according to type and
            parameter, and gives reinforcers by the method giveRnf. '''
            def __init__(self, type, parameter, m=5):
                self.type = type
                self.parameter = parameter
                self.m = m

            def giveRnf(self, t):
                global credits, trainingClock, tRPI, RnfProbRPI, shouldBeReinforced, nReinf, n_resp_since_last_rnf, reinf_times_delay#, intervalToRnf

                if self.type == "RR":
                    if np.random.binomial(1, 1/self.parameter):
                        reward_to_screen()
                        wasRnf.append(1)
                        nReinf += 1
                    else:
                        wasRnf.append(0)

                elif self.type == "RPI":
                    if len(response.rt) > self.m + 1:
                        tRPI = response.rt[-1] - response.rt[-self.m - 1]
                        RnfProbRPI = tRPI/(self.m*self.parameter)
                        if np.random.binomial(1, RnfProbRPI):
                            reward_to_screen()
                            wasRnf.append(1)
                            nReinf += 1
                        else:
                            wasRnf.append(0)
                    else:
                        wasRnf.append(0)

                elif self.type == 'RI':
                    if shouldBeReinforced:
                        reward_to_screen()
                        shouldBeReinforced = not shouldBeReinforced
                        wasRnf.append(1)
                        nReinf += 1
                    else:
                        wasRnf.append(0)

                elif self.type == 'Delay':
                        reinf_times_delay.append(t + self.parameter)
                        wasRnf.append(0)

                elif self.type == 'FR':
                    if n_resp_since_last_rnf == self.parameter:
                        reward_to_screen()
                        wasRnf.append(1)
                        nReinf += 1
                        n_resp_since_last_rnf = 0 #reset this to start counting again

                elif self.type == 'CRF':
                    reward_to_screen()
                    wasRnf.append(1)
                    nReinf += 1
                    n_resp_since_last_rnf = 0 #reset this to start counting again

                return t, trainingClock, wasRnf#, reinf_time #, RnfProbRPI, intervalToRnf

        def reward_to_screen():
            global credits
            reward.play()
            #img.draw()
            msg = visual.TextStim(win, text="You have won two shares of " + company_name +"!", pos=(0, 0.5), color= u'green', bold=True)
            msg.draw() # deleted for causal judgment task
            credits += points_per_rnf
            reinf_times.append(t)
            #wasRnf.append(1)
            win.flip()
            core.wait(time_on_screen)
            return reinf_times, wasRnf

        def msg_to_screen(msg,x,y, autodraw=False):
            text_object=visual.TextStim(win, text=msg, pos=(x,y), color=u'black')
            text_object.setAutoDraw(autodraw) # autodraw is false so that the txt doesn't appear constantly
            text_object.draw()

        def img_to_screen(img, position=(0, 0), autodraw=False):
            ''' Draws an image into the screen '''
            img = visual.ImageStim(win, image=img, pos=position)
            img.draw()

        def show_debugging_stuff():
            #nextIntRnf_txt = visual.TextStim(win, text="nextIntRnf: " + str(intervalToRnf), pos=(0, 0.8), color=u'black')
            #nextIntRnf_txt.draw()

            t_txt=visual.TextStim(win, text='t: ' + str(round(t,2)), pos=(-0.5, 0.6), color=u'black')
            t_txt.draw()

            timer_txt=visual.TextStim(win, text='timer: ' + str(round(timer.getTime(),2)), pos=(0.5, -0.6), color=u'black')
            timer_txt.draw()

            msg_to_screen('trial: ' + str(trial), -0.8, -0.9)
            #msg_to_screen('tSinceLastRnf: ' + str(round(tSinceLastRnf,2)), 0.6, -0.9)
            #msg_to_screen('RnfProbRPI: ' + str(round(RnfProbRPI,2)), -0.1, -0.9)
            #msg_to_screen('shouldBeRnf: ' + str(shouldBeReinforced), 0, -0.7)
            msg_to_screen('n_resp_since_last_rnf: ' + str(n_resp_since_last_rnf), -0.1, -0.8)
            msg_to_screen('reinf_times: ' + str(reinf_times), -0.7, -0.9)

        trial = 0 # initialise trial number

        # Show debugging stuff?
        debugging = False

        # create a csv file to save response times etc
        file_name = 'data/S%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
        csv_file = open(file_name+'.csv', 'wb')
        writer_object = csv.writer(csv_file, delimiter=",")

        writer_object.writerow(['session', 'participant', 'response.keys', 'response.rt', 'wasRnf', 'irt', 'trials.thisN', 'trial', 'schedule', 'parameter', 'nResp', 'nReinf', 'city', 'company1', 'company2', 'devalued_company']) # this is the first row with headers for columns
  Routine contingency_tests
    ImageComponent background_contingency_test
      opacity = .35
      startVal [time (s)] = 0.0
      image [set every repeat] = $background_colour
      size = 2
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    TextComponent contingency_question_txt
      color = black
      text [set every repeat] = Please press the button that gave you a share of this company in this city: 
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent company_name_txt
      color = green
      text [set every repeat] = $company1
      pos = (0, .55)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_contingency_test
      correctAns = $company1
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
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  Routine extinctionTest
  Routine devaluation_2
    ImageComponent image_2
      stopVal [duration (s)] = 0
      units = norm
      startVal [time (s)] = 0.0
      image = devaluation_img.png
      size = 2
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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    TextComponent devaluation_text_2
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.10
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      text:
        You shall continue trading in London and Paris. However, due to a malfunction with the trading equipment you will not receive any feedback.

        Press 'c' to continue.
  Routine thanks
    TextComponent thanks1
      color = black
      text = Experiment finished!                                                                 Press "f" to finish the experiment.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = "f"
      startVal [time (s)] = 0.0
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    ImageComponent expFinished
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      image = Slide7.png
      size = [2, 2]
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    SoundComponent finishedSound
      sound = exp_finished.wav
      volume = 0
      startVal [time (s)] = 0.0
  Routine contingency_tests2
    ImageComponent background_contingency_test2
      opacity = .35
      startVal [time (s)] = 0.0
      image [set every repeat] = $background_colour
      size = 2
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    TextComponent contingency_question_txt2
      color = black
      text = Please press the button that gave you a share of this company in this city: 
      pos = (0, 0.7)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent company_name_txt2
      color = green
      text [set every repeat] = $company2
      pos = (0, .55)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_contingency_test2
      correctAns = $company2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions1
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        You are a stockholder and control the shares of two companies, 'Globex Corporation' and 'Initech Corporation'. During the task you will be trading in two cities, London and Paris.

        You must earn as many points as possible by pressing the letters 'a' and 'l' on the keyboard. The 'a' will press the button on the left and the 'l' the button on the right.

        Press 'c' to continue
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'c'
      startVal [time (s)] = 0.0
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  Routine training_2
    ImageComponent background_2
      opacity = .35
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $background_colour
      size = 2
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    ImageComponent button_image1_2
      pos = [-0.5, -0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $button_img1
      size = [0.5, 0.5]
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    ImageComponent button_image2_2
      pos = [0.5, -0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $button_img2
      size = [0.5, 0.5]
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    KeyboardComponent response_2
      correctAns = wasRnf
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'a','l'
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent crd_text_2
      opacity = 0
      color = $[1.000,-1.000,-1.000]
      text = Shares
      stopVal [duration (s)] = 0
      pos = [0.0, 0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent condition_txt_2
      opacity = 0
      color = black
      stopVal [duration (s)] = 0
      pos = [-.5, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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      text [set every repeat]:
        $company1
    TextComponent condition_txt_2_right
      color = black
      text [set every repeat] = $company2
      stopVal [duration (s)] = 0
      pos = [.5, -.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    CodeComponent code_3
      Begin Experiment:
        #I tested the code with RI because for RPI schedules around 7 or 6 response_times were lost from the csv file. The Ri works fine so that suggests that the memory size of 5-ish is causing the program not to save the responses before those 5ish. That I need to test next.

        rnfProb1=[] # here we save the rnf prob for each trial
        trial=0
      Begin Routine:
        # these empty arrays below are filled as participant responds
        # they need to be erased after each trial, so they are put in "Begin Routine" and not "Begin Experiment"
        reinf_times = []
        wasRnf = []
        irt=[]

        # to save reinf_times for delay reinforcement
        reinf_times_delay = []

        nResp = 0
        nReinf = 0

        #if continueRoutine:
        #begin_trial.play()

        # set a timer for the trial
        timer = core.CountdownTimer(float(expInfo['trial_duration']))

        # Current schedule and parameters
        if trial in [1,3,5,7,9,11,13,15]: # if trial = 1,3,..., etc.
            schedule = Schedule('Delay', 3)
        elif trial in [0,2,4,6,8,10,12,14]: # if trial = 0, 2, ..., etc.
            schedule = Schedule('FR', 1)
        print(schedule.type)
        print(schedule.parameter)

        # Parameters for the RI and RI+ schedule: set tick each sec
        shouldBeReinforced = False # flag to set next reinforcer for RI schedule
        tickClock = core.CountdownTimer(1) # this is to tick every second

        # Clock for Debounce Time
        DebounceTimer = core.CountdownTimer(1)

        #reinf_delivery_time = 5 # this was to debug the delay schedule; it
        # is replaced by reinf_times_delivery array
      End Routine:
        #intervalToRnf = scheduleParameter[1]# + np.random.permutation(limit)[0]

        #nResp = len(response_training.rt)
        #nReinf = len(reinf_times)

        print("nResp: %f")%nResp
        print("nReinf: %f")%nReinf

        # deleted this chunk because this trial is on extinction so no rnfProb
        #if len(response_2.rt)>=1:
        #    rnfProb1.append(nReinf/nResp)
        #else:
        #    rnfProb1.append(0) # if no responses, add zero
        #print("rnfProb: %f")%rnfProb1[-1]


        if response_2.keys != None:  # we had a response
            thisExp.addData('reinf_times', reinf_times)
            thisExp.addData('wasRnf', wasRnf)
            thisExp.addData('irts', irt)
            thisExp.addData('mean_irt', np.mean(irt))
            #thisExp.addData('rnf_prob', rnfProb1)
            thisExp.nextEntry()

        core.wait(2)

        trial += 1
      End Experiment:
        csv_file1.close()
      Each Frame:
        #if mouse.isPressedIn(machine2_1):
        #    not_active1.pos = [-0.45, 0]
        #    schedule.type = 'RPI'
        #    schedule.parameter = 6

        #if mouse.isPressedIn(machine1):
        #    not_active1.pos = [0, 0]
        #    schedule.type = 'RR'
        #    schedule.parameter = 7

        if schedule.type == 'Delay' and len(reinf_times_delay)>0:
            if t >= reinf_times_delay[0]: # give delayed reinforcer
                reward_to_screen()
                reinf_times_delay.pop(0) # drop first reinf time
                wasRnf.append(1)
                response_2.keys.append('None')
                response_2.rt.append(t)
                nReinf += 1
                n_resp_since_last_rnf = 0 #reset this to start counting again
        #think about how to save the inter reinforcement intervals when delivering delayed rewards
        #            if len(response_2.rt)>1:
        #                irt.append(response_2.rt[-1]-response_2.rt[-2])
        #            else:
        #                irt.append(response_2.rt[-1])
                writer_object1.writerow([expInfo['session'], expInfo['participant'], response_2.keys[-1], response_2.rt[-1], trial, nResp, background_colour[:-4], company1, company2, devalued_company])
        #    except:
        #        pass

        if len(reinf_times) > 1:
            tSinceLastRnf = t-reinf_times[-1]

        # this is the tick for the RI and RI+ schedules
        if not shouldBeReinforced and tickClock.getTime() <= 0:
            shouldBeReinforced = np.random.binomial(1, 0.2)
            tickClock.reset()

        #this_IRT = t - response_2.rt[-1] if nResp > 0 else t # current IRT

        if len(theseKeys)>0 and DebounceTimer.getTime() < 0:
            coin.play()
            nResp += 1
            print("Resp:%i")%nResp

            if response_2.keys[-1] == 'a':
                button_pressed.pos = (-0.5, -0.2)
            else:
                button_pressed.pos = (0.5, -0.2)
            DebounceTimer.reset() # re-start debounce timer

            img_clock = core.Clock() # clock to show img for a n of sec
            while img_clock.getTime() < 0.10: # draw button pressed
                if response_2.keys[-1] == 'a':
                    button_image1_2.setAutoDraw(False)
                else:
                    button_image2_2.setAutoDraw(False)
                button_pressed.draw()
                win.flip()
                button_image1_2.setAutoDraw(True)
                button_image2_2.setAutoDraw(True)

            n_resp_since_last_rnf += 1
            credits -= int(expInfo['cost_responding'])
            #schedule.giveRnf(response_2.rt[-1]) # erased for extinction

            if len(response_2.rt)>1:
                irt.append(response_2.rt[-1]-response_2.rt[-2])
            else:
                irt.append(response_2.rt[-1])
            # write to csv on each frame in which there is a response_2
            try:
                writer_object1.writerow([expInfo['session'], expInfo['participant'], response_2.keys[-1], response_2.rt[-1], trial, nResp, background_colour[:-4], company1, company2, devalued_company])
            except:
                pass


        # this is just to debug
        credits_txt = visual.TextStim(win, text=str(int(credits)), pos=(0.0, 0.65), color=u'black')
        #credits_txt.draw() # don't show this on this extinction test

        # this should be part of debug function; shows n of reinf and resp so far
        #this_IRT_txt =  visual.TextStim(win, text=str(int(this_IRT)), pos=(-0.8, 0.35), color=u'black')
        #nResp_txt = visual.TextStim(win, text=str(int(nResp)), pos=(0.8, 0.35), color=u'black')
        #nReinf_txt = visual.TextStim(win, text=str(int(nReinf)), pos=(0.8, 0.35), color=u'black')
        #this_IRT.draw()
        #nResp_txt.draw()
        #nReinf_txt.draw()

        if debugging:
            show_debugging_stuff()

        #if timer.getTime() <= 0:
        #    continueRoutine=False

        if timer.getTime() <= 0 or credits >= credits_to_win:
            continueRoutine=False
  Routine extinction_test
Flow
  Routine trial
  Routine instructions
  Routine instructions2
  LoopInitiator training_trials loopType="TrialHandler"
    conditionsFile = $expInfo['condition']+'.xlsx'
    loopType = sequential
    nReps = 1
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    Routine training
    Routine ITI
  LoopTerminator training_trials
  Routine devaluation
  Routine devaluation_2
  Routine trial2
  LoopInitiator devaluation_test loopType="TrialHandler"
    conditionsFile = $expInfo['condition']+'.xlsx'
    loopType = sequential
    nReps = 1
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    Routine ITI
    Routine training_2
  LoopTerminator devaluation_test
  LoopInitiator trials_contingency_test loopType="TrialHandler"
    conditionsFile = $expInfo['condition']+'.xlsx'
    loopType = random
    nReps = 1
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    Routine contingency_tests
    Routine contingency_tests2
  LoopTerminator trials_contingency_test
  Routine thanks
